// CLARITY 3D feature extraction 
// 
// Macro for Fiji/ImageJ 
// Extracts features from segmented clarity data using 3D partcile analysis
// & summarizes the data per label (Allen atlas label)
//
// (c) Maged Goubran, mgoubran@stanford.edu, 2016
// 
// dependencies:
//
// the Mathematical Morphology plugins 
// http://imagej.net/MorphoLibJ
// 
// -----------------------------------

// Get files path
args = split(getArgument()," "); 

motherdir = args[0]
segpath = args[1];
lblspath = args[2];

print("Segmentation file path is: " + motherdir + "/" + segpath);

print("Allen labels file path is: " + motherdir + "/" + lblspath);

// read seg tif
print ("Reading segmentation");
open(segpath);
width = getWidth();
clarslices = nSlices;

// read label image
print ("Reading Allen labels");
open(lblspath);

// upsample labels
print ("Upsampling Allen labels to clarity dimensions");
run("Size...", "width=&width depth=&clarslices constrain interpolation=None");

rename("allen_lbls.tif");

selectWindow("allen_lbls.tif");

getStatistics(area, mean, min, max, std);
labels=max;

// get lbls histogram
getHistogram(values,counts,max,1,max);

// add to same table 
name="Result-morpho";
nameOfStatTab="["+name+"]";
table=nameOfStatTab;

// avg table name
tablename = "clarity_features_allen_labels"; 
newtable ="["+tablename+"]";
run("New... ", "name="+newtable+" type=Table");
print(newtable, "\\Headings:Label\tNumNeurons\tVolumeAvg\tVolumeStd\tVolumeMax\tVolumeMin\tSurfaceAreaAvg\tSurfaceAreaStd\tSurfaceAreaMax\tSurfaceAreaMin\tSphericityAvg\tSphericityStd.");	

c=0;

outxls = motherdir + tablename + ".xls";

if (!File.exists(outxls)) {

	// loop over labels
	for (l = 1; l <= labels ; l++) {

		// check if label exists	
	   	if (counts[l] > 0) {

			c=c+1; // counter

			lbl = l+1;
	   		   	 
		    print("processing label " + lbl);

			selectWindow("allen_lbls.tif");

			// Duplicate image
			run("Duplicate...","duplicate");
		
			// threshold
		    setThreshold(lbl,lbl);
		    run("Convert to Mask", "background=Default black");

			lblmaskstack = getImageID();
			rename("lbl_mask");
			
			// make binary (divide by label value)
			run("Divide...", "value=255 stack");
			
			// mask by label img **
			imageCalculator("Multiply create stack","seg.tif","lbl_mask");
			
			// run particle analysis 3D
			run("Particle Analysis 3D", "volume surface sphericity surface=[Crofton (13 dirs.)] euler=C26");
		
			// Add statistics 
			selectWindow("Result-morpho");
			results = getInfo();
			lines = split(results, "\n");
			headings = lines[0];
			titlesofcolumns = split(headings, ",\t");	
			count = lines.length-1;
			
			//Put the results into an array 
			volArray=newArray(); 
			surfArray=newArray(); 
			sphereArray=newArray();
			
			for(i=0;i<count;i++){ 
			    volArray=Array.concat(volArray,getResult("Volume",i));
			    surfArray=Array.concat(surfArray,getResult("SurfaceArea",i)); 
			    sphereArray=Array.concat(sphereArray,getResult("Sphericity",i));
			}; 
			
			//Get the summary out and into variables; 
			Array.getStatistics(volArray,volmin,volmax,volavg,volstDev); 
			Array.getStatistics(surfArray,surfmin,surfmax,surfavg,surfstDev); 
			Array.getStatistics(sphereArray,spheremin,spheremax,sphereavg,spherestDev); 
					
			// print(table,count+1+ "\t"+ "Avg" + "\t" + volavg + "\t" + surfavg + "\t" + sphereavg );
			// print(table,count+1+ "\t"+ "Max" + "\t" + volmax + "\t" + surfmax + "\t" + spheremax );
			// print(table,count+1+ "\t"+ "Min" + "\t" + volmin + "\t" + surfmin + "\t" + spheremin );
			// print(table,count+1+ "\t"+ "Std" + "\t" + volstDev + "\t" + surfstDev + "\t" + spherestDev );
			
			// save results
			//saveAs("Results", "particle_analysis_lbl_"+l+".xls");
		
			// populate avg table 	
			print(newtable,lbl+"\t"+volArray.length+"\t"+volavg+"\t"+volstDev+"\t"+volmax+"\t"+volmin+"\t"+surfavg+"\t"+surfstDev+"\t"+surfmax+"\t"+surfmin+"\t"+sphereavg+"\t"+spherestDev); 
		
			// close masked img
			maskedstack = getImageID();
			selectImage(maskedstack);
			close();

			// close lbl mask
			selectImage(lblmaskstack);
			close();

	   	};	

	};

	// Save 
	selectWindow(tablename);
	saveAs("Text", outxls);

	// save log file 
	outlog = motherdir + "feat_extract_log.txt";

	f = File.open(outlog); 
	content=getInfo("log");
	print(f,content);
	File.close(f); 

} else {

	print ("Features already computed .. skipping");

}

// Quit Fiji
run("Quit");
